CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mCherry")
    Name to assign these images:DCP1A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:TDP43
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:nucleus
    Typical diameter of objects, in pixel units (Min,Max):40,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:nucleus
    Name the objects to be identified:cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:TDP43
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DCP1A
    Name the primary objects to be identified:Pbodies
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:DCP1A, TDP43
    Select objects to measure:Pbodies, cell

RelateObjects:[module_num:9|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
    Parent objects:cell
    Child objects:Pbodies
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|MOmaps/CellProfiler/Unbiased_analysis/deltaNLS
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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