CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "DAPI")
    Name to assign these images:nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:or (file does contain "mCherry") (file does contain "GFP") (file does contain "Cy5")
    Name to assign these images:marker
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureColocalization:[module_num:5|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
    Select images to measure:marker, nucleus
    Set threshold as percentage of maximum intensity for the images:15
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureImageIntensity:[module_num:6|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
    Select images to measure:marker
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:nucleus
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):40,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:marker
    Name the primary objects to be identified:PrimaryObject1
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:marker
    Name the primary objects to be identified:PrimaryObject2
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:marker
    Name the primary objects to be identified:PrimaryObject3
    Typical diameter of objects, in pixel units (Min,Max):100,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nucleus
    Name the objects to be identified:SecondaryObject
    Select the method to identify the secondary objects:Propagation
    Select the input image:marker
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:marker
    Select objects to measure:PrimaryObject1, PrimaryObject2, PrimaryObject3, SecondaryObject

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:PrimaryObject1, PrimaryObject2, PrimaryObject3, SecondaryObject
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:14|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
    Select images to measure:marker
    Select objects to measure:PrimaryObject1, PrimaryObject2, PrimaryObject3, SecondaryObject
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectIntensityDistribution:[module_num:15|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
    Select images to measure:marker
    Hidden:4
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:PrimaryObject1
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nucleus
    Select objects to measure:PrimaryObject2
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nucleus
    Select objects to measure:PrimaryObject3
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nucleus
    Select objects to measure:SecondaryObject
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nucleus
    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:PrimaryObject1
    Select neighboring objects to measure:PrimaryObject1
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:PrimaryObject2
    Select neighboring objects to measure:PrimaryObject2
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:PrimaryObject3
    Select neighboring objects to measure:PrimaryObject3
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:SecondaryObject
    Select neighboring objects to measure:SecondaryObject
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CP_
    Overwrite existing files without warning?:Yes
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