CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:36
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:DCP1A
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mCherry")
    Name to assign these images:MAP2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:DAPI
    Typical diameter of objects, in pixel units (Min,Max):40,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.2
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.03,1
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    Log transform before thresholding?:No
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    Size of adaptive window:60
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:DAPI
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:MAP2
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cell
    Select the smaller identified objects:DAPI
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DCP1A
    Name the primary objects to be identified:Pbodies
    Typical diameter of objects, in pixel units (Min,Max):2,11
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.05,0.5
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

RelateObjects:[module_num:9|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
    Parent objects:Cytoplasm
    Child objects:Pbodies
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PB_in_cyto
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
IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:Cytoplasm
    Select the smaller identified objects:Pbodies
    Name the tertiary objects to be identified:cyto_no_pb
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Cytoplasm, Pbodies
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MaskImage:[module_num:12|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
    Select the input image:DCP1A
    Name the output image:DCP1A_pb_only
    Use objects or an image as a mask?:Objects
    Select object for mask:Pbodies
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    Invert the mask?:No

MaskImage:[module_num:13|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
    Select the input image:DCP1A
    Name the output image:DCP1A_cyto_only
    Use objects or an image as a mask?:Objects
    Select object for mask:cyto_no_pb
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    Invert the mask?:No

MeasureTexture:[module_num:14|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
    Select images to measure:DCP1A_cyto_only
    Select objects to measure:Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:9
    Texture scale to measure:15

MeasureTexture:[module_num:15|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
    Select images to measure:DCP1A_pb_only
    Select objects to measure:Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:9
    Texture scale to measure:15

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:Pbodies
    Name the output image:PB_mask_binary
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:cyto_no_pb
    Name the output image:CYTOnoPB_mask_binary
    Select the color format:Binary (black & white)
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
MeasureObjectIntensity:[module_num:18|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
    Select images to measure:CYTOnoPB_mask_binary, DCP1A, DCP1A_cyto_only, DCP1A_pb_only, PB_mask_binary
    Select objects to measure:Cytoplasm, PB_in_cyto, Pbodies, cyto_no_pb

CalculateMath:[module_num:19|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
    Name the output measurement:Mean_DCP1A_PB
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_IntegratedIntensity_DCP1A_pb_only
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Intensity_IntegratedIntensity_PB_mask_binary
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.000001
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:20|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
    Name the output measurement:Mean_DCP1A_cyto
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_IntegratedIntensity_DCP1A_pb_only
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Intensity_IntegratedIntensity_CYTOnoPB_mask_binary
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.000001
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:21|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
    Name the output measurement:DCP1A_PB_over_cyto
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Math_Mean_DCP1A_PB
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Math_Mean_DCP1A_cyto
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.000000001
    How should the output value be rounded?:Rounded to a specified number of decimal places
    Enter how many decimal places the value should be rounded to:2
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:22|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
    Name the output measurement:Texture_Contrast_DCP1A_pb_only_3
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_Contrast_DCP1A_pb_only_3_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_Contrast_DCP1A_cyto_only_3_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:23|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
    Name the output measurement:Texture_Contrast_DCP1A_pb_only_5
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_Contrast_DCP1A_pb_only_5_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_Contrast_DCP1A_cyto_only_5_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:24|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
    Name the output measurement:Texture_Contrast_DCP1A_pb_only_9
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_Contrast_DCP1A_pb_only_9_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_Contrast_DCP1A_cyto_only_9_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:25|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
    Name the output measurement:Texture_Contrast_DCP1A_pb_only_15
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_Contrast_DCP1A_pb_only_15_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_Contrast_DCP1A_cyto_only_15_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:26|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
    Name the output measurement:Texture_Homogeneity_DCP1A_pb_only_3
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_InverseDifferenceMoment_DCP1A_pb_only_3_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_InverseDifferenceMoment_DCP1A_cyto_only_3_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:27|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
    Name the output measurement:Texture_Homogeneity_DCP1A_pb_only_5
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_InverseDifferenceMoment_DCP1A_pb_only_5_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_InverseDifferenceMoment_DCP1A_cyto_only_5_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:28|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
    Name the output measurement:Texture_Homogeneity_DCP1A_pb_only_9
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_InverseDifferenceMoment_DCP1A_pb_only_9_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_InverseDifferenceMoment_DCP1A_cyto_only_9_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:29|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
    Name the output measurement:Texture_Homogeneity_DCP1A_pb_only_15
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_InverseDifferenceMoment_DCP1A_pb_only_15_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_InverseDifferenceMoment_DCP1A_cyto_only_15_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:30|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
    Name the output measurement:Texture_Entropy_DCP1A_pb_only_3
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_Entropy_DCP1A_pb_only_3_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_Entropy_DCP1A_cyto_only_3_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:31|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
    Name the output measurement:Texture_Entropy_DCP1A_pb_only_5
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_Entropy_DCP1A_pb_only_5_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_Entropy_DCP1A_cyto_only_5_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:32|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
    Name the output measurement:Texture_Entropy_DCP1A_pb_only_9
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_Entropy_DCP1A_pb_only_9_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_Entropy_DCP1A_cyto_only_9_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:33|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
    Name the output measurement:Texture_Entropy_DCP1A_pb_only_15
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Texture_Entropy_DCP1A_pb_only_15_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Texture_Entropy_DCP1A_cyto_only_15_00_256
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureTexture:[module_num:34|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
    Select images to measure:DCP1A
    Select objects to measure:Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:9
    Texture scale to measure:15

MeasureGranularity:[module_num:35|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
    Select images to measure:DCP1A_cyto_only, DCP1A_pb_only
    Measure within objects?:Yes
    Select objects to measure:PB_in_cyto, cyto_no_pb
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

ExportToSpreadsheet:[module_num:36|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|V:\\Collaboration\\NOVA\\cell_profiler\\outputs\\cell_profiler_RUNS\\coyne_old_DCP1A_010925\\batch1\\sALSPositiveCytoTDP43\\panelA\\Untreated\\rep10\\DCP1A
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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