CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "DAPI")
    Name to assign these images:nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:or (file does contain "mCherry")
    Name to assign these images:MAP2
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:TDP43
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:nucleus
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):40,110
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nucleus
    Name the objects to be identified:Cytoplasm
    Select the method to identify the secondary objects:Propagation
    Select the input image:MAP2
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:TDP43
    Select objects to measure:Cytoplasm, Nucleus

CalculateMath:[module_num:8|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
    Name the output measurement:cyto_over_nuc
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cytoplasm
    Select the numerator measurement:Intensity_MeanIntensity_TDP43
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nucleus
    Select the denominator measurement:Intensity_MeanIntensity_TDP43
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.000000001
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|V:\\Collaboration\\NOVA\\cell_profiler\\outputs\\cell_profiler_RUNS\\coyne_old_TDP43_020925_by_hand\\batch1\\c9orf72ALSPatients\\panelA\\Untreated\\rep3\\TDP43
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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