CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:FUS
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:FUS
    Name the primary objects to be identified:live
    Typical diameter of objects, in pixel units (Min,Max):12,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

MeasureImageAreaOccupied:[module_num:7|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
    Measure the area occupied by:Objects
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    Select object sets to measure:live, nuclei

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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